PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = project_circles
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Routines
  Routine trial
    TextComponent cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $prompt
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    ImageComponent image
      image [set every repeat] = $file_name
      size [set every repeat] = $size
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp
      allowedKeys = 'm','z'
      forceEndRoutine = True
      startVal [time (s)] = 2.5
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  Routine practice
    TextComponent cross_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent practice_low
      image [set every repeat] = $file_name
      size [set every repeat] = $size
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $prompt
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    KeyboardComponent key_resp_2
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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    TextComponent yes_no_prac
      letterHeight = 0.04
      pos = (0, -.35)
      startVal [time (s)] = 3
      text = [yes]                                        [no]
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  Routine feedback1
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every frame]:
        $message1
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        #added variables
        message1 = "no message1 loaded"
        message2 = "no message2 loaded"
        message3 = "no message3 loaded"
        scoreCount = 0 #number of correct responses
      Begin Routine:
        if correct_key_resp == key_resp_2.keys:
                message1 = "Good!"
                scoreCount += 1
        else:
            message1 = "Whoops!"
  Routine debriefComp
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        debriefMessage= ""
        proceed = False
      Begin Routine:
        debriefMessage = "You scored " + str(scoreCount) + " of 6. \n"

        if scoreCount >= 5:
            debriefMessage+="Congrats! You are ready to move on to the main experiment. \n"
            proceed=True
        else:
            debriefMessage += "Let's try the practice questions again."

        debriefMessage+="\n Press Z to continue"

        scoreCount=0
  Routine debrief
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $debriefMessage
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    KeyboardComponent key_resp_3
      allowedKeys = "z"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
      End Routine:
        if proceed:
            break
  Routine brief_pause
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Get ready...
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  Routine instructions
    ImageComponent image_2
      image = instructions.png
      size = (1.25, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator practice_section loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 111
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    LoopInitiator practice_trials loopType="TrialHandler"
      conditionsFile = circles_practice.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'circle_amount': 2, 'file_name': '2_circles_lined.png', 'size': (0.5, 0.25), 'prompt': 'There were 2 circles', 'correct_answer': 'Yes', 'correct_key_resp': 'z'},
        {'circle_amount': 2, 'file_name': '2_circles_lined.png', 'size': (0.5, 0.25), 'prompt': 'There were 3 circles', 'correct_answer': 'No', 'correct_key_resp': 'm'},
        {'circle_amount': 3, 'file_name': '3_circles_notlined.png', 'size': (0.5, 0.5), 'prompt': 'There were 3 circles', 'correct_answer': 'Yes', 'correct_key_resp': 'z'},
        {'circle_amount': 3, 'file_name': '3_circles_notlined.png', 'size': (0.5, 0.5), 'prompt': 'There were 4 circles', 'correct_answer': 'No', 'correct_key_resp': 'm'},
        {'circle_amount': 4, 'file_name': '4_circles_lined.png', 'size': (0.5, 0.5), 'prompt': 'There were 4 circles', 'correct_answer': 'Yes', 'correct_key_resp': 'z'},
        {'circle_amount': 4, 'file_name': '4_circles_lined.png', 'size': (0.5, 0.5), 'prompt': 'There were 5 circles', 'correct_answer': 'No', 'correct_key_resp': 'm'}]
      Routine practice
      Routine feedback1
    LoopTerminator practice_trials
    Routine debriefComp
    Routine debrief
  LoopTerminator practice_section
  Routine brief_pause
  LoopInitiator trials_low loopType="TrialHandler"
    conditionsFile = circles_low.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'condition_size': 'Low', 'condition_lined': 'Yes', 'circle_amount': 2, 'file_name': '2_circles_lined.png', 'size': (0.5, 0.25), 'prompt': 'There were 2 circles', 'correct_answer': 'Yes', 'correct_key_resp': 'z'},
      {'condition_size': 'Low', 'condition_lined': 'Yes', 'circle_amount': 2, 'file_name': '2_circles_lined.png', 'size': (0.5, 0.25), 'prompt': 'There were 2 circles', 'correct_answer': 'Yes', 'correct_key_resp': 'z'},
      {'condition_size': 'Low', 'condition_lined': 'Yes', 'circle_amount': 2, 'file_name': '2_circles_lined.png', 'size': (0.5, 0.25), 'prompt': 'There were 4 circles', 'correct_answer': 'No', 'correct_key_resp': 'm'},
      {'condition_size': 'Low', 'condition_lined': 'Yes', 'circle_amount': 2, 'file_name': '2_circles_lined.png', 'size': (0.5, 0.25), 'prompt': 'There were 3 circles', 'correct_answer': 'No', 'correct_key_resp': 'm'},
      {'condition_size': 'Low', 'condition_lined': 'Yes', 'circle_amount': 3, 'file_name': '3_circles_lined.png', 'size': (0.75, 0.25), 'prompt': 'There were 3 circles', 'correct_answer': 'Yes', 'correct_key_resp': 'z'},
      {'condition_size': 'Low', 'condition_lined': 'Yes', 'circle_amount': 3, 'file_name': '3_circles_lined.png', 'size': (0.75, 0.25), 'prompt': 'There were 3 circles', 'correct_answer': 'Yes', 'correct_key_resp': 'z'},
      {'condition_size': 'Low', 'condition_lined': 'Yes', 'circle_amount': 3, 'file_name': '3_circles_lined.png', 'size': (0.75, 0.25), 'prompt': 'There were 2 circles', 'correct_answer': 'No', 'correct_key_resp': 'm'}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
    Routine trial
  LoopTerminator trials_low
  LoopInitiator trials_high loopType="TrialHandler"
    conditionsFile = circles_high.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'condition_size': 'High', 'condition_lined': 'Yes', 'circle_amount': 7, 'file_name': '7_circles_lined.png', 'size': (0.75, 0.35), 'prompt': 'There were 7 circles', 'correct_answer': 'Yes', 'correct_key_resp': 'z'},
      {'condition_size': 'High', 'condition_lined': 'Yes', 'circle_amount': 7, 'file_name': '7_circles_lined.png', 'size': (0.75, 0.35), 'prompt': 'There were 7 circles', 'correct_answer': 'Yes', 'correct_key_resp': 'z'},
      {'condition_size': 'High', 'condition_lined': 'Yes', 'circle_amount': 7, 'file_name': '7_circles_lined.png', 'size': (0.75, 0.35), 'prompt': 'There were 6 circles', 'correct_answer': 'No', 'correct_key_resp': 'm'},
      {'condition_size': 'High', 'condition_lined': 'Yes', 'circle_amount': 7, 'file_name': '7_circles_lined.png', 'size': (0.75, 0.35), 'prompt': 'There were 8 circles', 'correct_answer': 'No', 'correct_key_resp': 'm'},
      {'condition_size': 'High', 'condition_lined': 'Yes', 'circle_amount': 8, 'file_name': '8_circles_lined.png', 'size': (0.75, 0.35), 'prompt': 'There were 8 circles', 'correct_answer': 'Yes', 'correct_key_resp': 'z'},
      {'condition_size': 'High', 'condition_lined': 'Yes', 'circle_amount': 8, 'file_name': '8_circles_lined.png', 'size': (0.75, 0.35), 'prompt': 'There were 8 circles', 'correct_answer': 'Yes', 'correct_key_resp': 'z'},
      {'condition_size': 'High', 'condition_lined': 'Yes', 'circle_amount': 8, 'file_name': '8_circles_lined.png', 'size': (0.75, 0.35), 'prompt': 'There were 7 circles', 'correct_answer': 'No', 'correct_key_resp': 'm'}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
    Routine trial
  LoopTerminator trials_high
